PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [800, 800]
  expName = trialloops-extreme-joehoang1
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Routines
  Routine Instruction
    TextComponent InstructionText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see a series of images
        If the image is that of a dog press s
        If the image is that of a human press k
        Press space to move on to the trials stage
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Trial
    ImageComponent DHimage
      image [set every repeat] = $Image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent response
      allowedKeys = 's','k'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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  Routine Feedback
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if response.corr:
            feedback = 'You are correct! Good job!'
        else:
            feedback = 'You are incorrect. Please try harder.'
    TextComponent fb
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $feedback
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images.csv
    loopType = fullRandom
    nReps = 12
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    conditions:
      [OrderedDict([('Image', 'pictures/1.jpg'), ('corrAns', 's')]),
      OrderedDict([('Image', 'pictures/2.jpg'), ('corrAns', 's')]),
      OrderedDict([('Image', 'pictures/3.jpg'), ('corrAns', 's')]),
      OrderedDict([('Image', 'pictures/4.jpg'), ('corrAns', 's')]),
      OrderedDict([('Image', 'pictures/5.jpg'), ('corrAns', 's')]),
      OrderedDict([('Image', 'pictures/6.jpg'), ('corrAns', 's')]),
      OrderedDict([('Image', 'pictures/7.jpg'), ('corrAns', 'k')]),
      OrderedDict([('Image', 'pictures/8.jpg'), ('corrAns', 'k')]),
      OrderedDict([('Image', 'pictures/9.jpg'), ('corrAns', 'k')]),
      OrderedDict([('Image', 'pictures/10.jpg'), ('corrAns', 'k')]),
      OrderedDict([('Image', 'pictures/11.jpg'), ('corrAns', 'k')]),
      OrderedDict([('Image', 'pictures/12.jpg'), ('corrAns', 'k')])]
    Routine Trial
    Routine Feedback
  LoopTerminator trials
